OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0xc67a01dc Channel Selector "7;8" => #1
  Channel List = 7;8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Simple DSP
  Equation = x*x
-> Python scripting
  Clock frequency (Hz) = 64
  Script = F:/Studies Stuff/EPITA Work - International Master Program (Computer Security)/Courses/Specialization Semester/PRI - Project of Research and Innovation/Tools & Resources/LightBCI-master - RESOURCES/openvibe/OpenVibe_Python_mulitchan.py
  calib_duration = 40
