OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "2;4;5;7" => #1
  Channel List = 2;4;5;7
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> 0xc67a01dc Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Simple DSP
  Equation = x*x
-> Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/LSCP/Desktop/LightBCI-master/openvibe/OpenVibe_Arduino.py
  window_len = 30
